PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = $"https://edinburghinformatics.eu.qualtrics.com/jfe/form/SV_802qCn2VjZSMop7?participant="+expInfo['participant']+"&GROUP="+expInfo['group']
  Experiment info = {'participant': '123456.8790', 'session': '001', 'group': '2', 'order': '15'}
  Full-screen window = True
  Incomplete URL = https://www.prolific.co/
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.1
  Window size (pixels) = [1440, 900]
  expName = Online task
  exportHTML = on Save
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Routines
  Routine stage1
    ImageComponent s1_right
      image = jpg/s1/fractal_stage1_s1_2.jpg
      pos = (0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
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    ImageComponent s1_left
      image = jpg/s1/fractal_stage1_s1_1.jpg
      pos = (-0.35, -0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
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    ImageComponent bg_s1
      image = None
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
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    KeyboardComponent stage_1
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
      store = first key
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    CodeComponent save_stage1_c
      Code Type = Auto->JS
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      End Routine:
        #if no response, set times to 0
        if not stage_1.keys:
            faster='Try faster!\n\n\nPress ‘c’ to continue'
            t2=0
            t3=0
            t4=0
            t5=0
            t6=3600
            continueRoutine=false

        #stage 1 choice
        stage1_choice=0
        if stage_1.keys=="left":
            stage1_choice=1
        if stage_1.keys=="right":
            stage1_choice=2

        psychoJS.experiment.addData('stage1_choice',stage1_choice)
  Routine post_stage1
    ImageComponent s1_right_post
      pos = (0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t2
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    ImageComponent s1_left_post
      pos = (-0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t2
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    ImageComponent bg_s1_post
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t2
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    CodeComponent set_post_s1_jpg
      Code Type = Auto->JS
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  Routine stage2
    CodeComponent rng_s2
      Code Type = Auto->JS
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    ImageComponent bg_s2
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t3
      units = norm
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    ImageComponent s2_right
      pos = (0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t3
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    ImageComponent s2_left
      pos = (-0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t3
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    ImageComponent prev_s1
      pos = (0, 0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t3
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    CodeComponent set_s2_jpg
      Code Type = Auto->JS
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      Begin Routine:
        #prob_trans = Math.random()
        prob_trans = rng.uniform()
        random_decide = (prob_trans<0.7)
        stage2_state=0

        if not stage_1.keys: #no stage 1 response
            s2_left.setImage('jpg/empty.jpg');
            s2_right.setImage('jpg/empty.jpg');
            bg_s2.setImage('jpg/empty.jpg');
            bg_post_s2.setImage('jpg/empty.jpg');
            bg_reward.setImage('jpg/empty.jpg');
            prev_s2.setImage('jpg/empty.jpg');
            stage2_choice_name='';
            reward_locator='';
            continueRoutine = false
        else:
            if random_decide: #common transition
                stage2_state=1+stage1_choice
            else: #rare transition
                stage2_state=4-stage1_choice #3,2

            s2_left.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_1'+'.jpg')
            s2_right.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_2'+'.jpg')
            bg_s2.setImage('jpg/s2/bg_'+str(stage2_state)+'.jpg');
            bg_post_s2.setImage('jpg/s2/bg_'+str(stage2_state)+'.jpg');
            bg_reward.setImage('jpg/s2/bg_'+str(stage2_state)+'.jpg');
            psychoJS.experiment.addData('prob_trans',prob_trans)


        #    #stage 2 images
        #    if stage1_choice == 1 or stage1_choice == 3:
        #        stage2_choice_name = 'jpg/s2/fractal_stage2_after_s1_13'
        #        reward_locator = '13'
        #        s2.setImage('jpg/s2/fractal_stage2_after_s1_13.png');
        #        bg_s2.setImage('jpg/s2/bg_1.jpg');
        #        bg_post_s2.setImage('jpg/s2/bg_1.jpg');
        #        bg_reward.setImage('jpg/s2/bg_1.jpg');
        #        prev_s2.setImage('jpg/s2/fractal_stage2_after_s1_13.png');
        #    if stage1_choice == 2 or stage1_choice == 4:
        #        stage2_choice_name = 'jpg/s2/fractal_stage2_after_s1_24'
        #        reward_locator = '24'
        #        s2.setImage('jpg/s2/fractal_stage2_after_s1_24.png');
        #        bg_s2.setImage('jpg/s2/bg_2.jpg');
        #        bg_post_s2.setImage('jpg/s2/bg_2.jpg');
        #        bg_reward.setImage('jpg/s2/bg_2.jpg');
        #        prev_s2.setImage('jpg/s2/fractal_stage2_after_s1_24.png');
    CodeComponent prev_choice
      Code Type = Auto->JS
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    KeyboardComponent stage_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t3
      store = first key
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    CodeComponent no_choice
      Code Type = Auto->JS
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      End Routine:
        stage2_choice=0
        if not stage_2.keys:
            faster='Try faster!\n\n\nPress ‘c’ to continue'
            t4=0
            t5=0
            t6=3600
            psychoJS.experiment.addData('stage2_state',stage2_state)
            psychoJS.experiment.addData('stage2_choice',stage2_choice)
            continueRoutine=false


        if stage_2.keys=="left":
            stage2_choice=1
            prev_s2.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_'+str(stage2_choice)+'.jpg');
        if stage_2.keys=="right":
            stage2_choice=2
            prev_s2.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_'+str(stage2_choice)+'.jpg');

        psychoJS.experiment.addData('stage2_choice',stage2_choice)
        psychoJS.experiment.addData('stage2_state',stage2_state)
    TextComponent text
      disabled = True
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t3
      text [set every frame] = $text_stage2
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        text_stage2 = str(prob_trans)
  Routine post_stage2
    ImageComponent bg_post_s2
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t4
      units = norm
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    ImageComponent prev_s1_again
      pos = (0, 0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t4
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    ImageComponent s2_post_right
      pos = (0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t4
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    ImageComponent s2_post_left
      pos = (-0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t4
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    CodeComponent set_post_s2
      Code Type = Auto->JS
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      Begin Routine:
        reward_locator = [stage2_state-1,stage2_choice]
        if not stage_1.keys:
            continueRoutine = false
            s2_post_left.setImage("jpg/empty.jpg")
            s2_post_right.setImage("jpg/empty.jpg")
            continueRoutine = false
        elif not stage_2.keys:
            continueRoutine = false
            s2_post_left.setImage("jpg/empty.jpg")
            s2_post_right.setImage("jpg/empty.jpg")
            continueRoutine = false
        elif stage_2.keys == 'left':
            s2_post_right.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_2.jpg')
            s2_post_left.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_1_act.jpg')
        elif stage_2.keys == 'right':
            s2_post_right.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_2_act.jpg')
            s2_post_left.setImage('jpg/s2/fractal_stage2_state'+str(stage2_state)+'_1.jpg')
    CodeComponent prev_choice_again
      Code Type = Auto->JS
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  Routine reward
    CodeComponent rng_r
      Code Type = Auto->JS
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    ImageComponent bg_reward
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t5
      units = norm
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    ImageComponent reward_img
      image = None
      pos = (0,-0.12)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t5
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    CodeComponent reward_code
      Code Type = Auto->JS
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      Begin Routine:
        pr_r=0
        rew_img_file=''
        #random_var_rew=Math.random();
        random_var_rew=rng.uniform();
        #file_random = rng.random(0, 5)
        file_random=0
        if not stage_1.keys:
            reward_img.setImage('jpg/empty.jpg')
            reward_amount=[]
            psychoJS.experiment.addData('reward11',prob_rew['11'])
            psychoJS.experiment.addData('reward12',prob_rew['12'])
            psychoJS.experiment.addData('reward21',prob_rew['21'])
            psychoJS.experiment.addData('reward22',prob_rew['22'])
            psychoJS.experiment.addData('condition',reward_type[t_count])
            continueRoutine = false
        elif not stage_2.keys:
            reward_img.setImage('jpg/empty.jpg')
            reward_amount=[]
            psychoJS.experiment.addData('reward11',prob_rew['11'])
            psychoJS.experiment.addData('reward12',prob_rew['12'])
            psychoJS.experiment.addData('reward21',prob_rew['21'])
            psychoJS.experiment.addData('reward22',prob_rew['22'])
            psychoJS.experiment.addData('condition',reward_type[t_count])
            continueRoutine = false
        elif stage_1.keys and stage_2.keys:
            if random_var_rew<prob_rew[str(reward_locator[0])+str(reward_locator[1])]:
                if reward_type[t_count] == 'practice':
                    reward_img.setImage('jpg/reward/coin_neutral_p.jpg')
                if reward_type[t_count] == 'neutral':
                    reward_img.setImage('jpg/reward/coin_neutral_p.jpg')
                    running_reward=running_reward+1
                if reward_type[t_count] == 'trigger':
                    rew_img_file = tr_rews#[file_random]
        #            reward_img.setImage('jpg/reward/coin_trigger.jpg')
                    reward_img.setImage('jpg/reward/'+rew_img_file+'.jpg')
                    psychoJS.experiment.addData('reward_img',rew_img_file)
                    psychoJS.experiment.addData('file_random',file_random)
                    running_reward=running_reward+1
                pr_r = prob_rew[str(reward_locator[0])+str(reward_locator[1])]
                psychoJS.experiment.addData('reward',1)

            else:
                reward_img.setImage('jpg/reward/coin_neutral_0.jpg')
                pr_r = prob_rew[str(reward_locator[0])+str(reward_locator[1])]
                psychoJS.experiment.addData('reward',0)
            psychoJS.experiment.addData('reward11',prob_rew['11'])
            psychoJS.experiment.addData('reward12',prob_rew['12'])
            psychoJS.experiment.addData('reward21',prob_rew['21'])
            psychoJS.experiment.addData('reward22',prob_rew['22'])
            psychoJS.experiment.addData('condition',reward_type[t_count])
            psychoJS.experiment.addData('random_var_rew',random_var_rew)
    CodeComponent grw_code
      Code Type = Auto->JS
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    ImageComponent prev_s2
      pos = (0, 0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t5
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    CodeComponent redefne_durs
      Code Type = Auto->JS
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      End Routine:
        if t_count>0:
            t1=1.5
            t2=0.375
            t3=1.5
            t4=0.375
            t5=1
        elif t_count==0:
            t1=120
            t2=0.375
            t3=120
            t4=0.375
            t5=2
        if not stage_1.keys or not stage_1.keys:
            t6=3600
        stage_1.keys=[]
        stage_2.keys=[]
    CodeComponent text_re
      Code Type = Auto->JS
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      Begin Experiment:
        rew_tex=''
    TextComponent text_3
      color = black
      disabled = True
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t5
      text [set every frame] = $rew_tex
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  Routine wait
    ImageComponent wait_bg
      image = jpg/empty.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t6
      units = norm
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    TextComponent faster_txt
      color [set every repeat] = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t6
      text [set every repeat] = $faster
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    CodeComponent faster_code
      Code Type = Auto->JS
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      End Routine:
        faster=' '
        t6=0.25
    KeyboardComponent key_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t6
      store = nothing
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  Routine initialise
    CodeComponent timer
      Code Type = Auto->JS
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      Each Frame:
        countdown=round(3-t)
        if countdown==0:
            timer_text="Go!"
        else:
            if t_count>0:
                timer_text="Get ready! The task begins in: "+str(countdown)
            elif t_count==0:
                timer_text="Get ready! The practice begins in: "+str(countdown)
    CodeComponent define_GRW
      Code Type = Auto->JS
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      Begin Routine:
        r11=(0.72-0.58)*Math.random()+ 0.58;
        r12=(0.45-0.31)*Math.random()+ 0.31;
        r21=(0.45-0.31)*Math.random()+ 0.31;
        r22=(0.72-0.58)*Math.random()+ 0.58;
        if t_count==0:
            sigma = 0.025*1.1 #sigma for GRW
            prob_rew = {'11':r12, '12':r11, '21':r21, '22':r22}
        if t_count==1:
            sigma = 0.025*1.1
            prob_rew = {'11':r11, '12':r12, '21':r21, '22':r22}
        if t_count==3:
            sigma = 0.025*1.1
            prob_rew = {'11':r12, '12':r11, '21':r22, '22':r21}
    TextComponent task_warn
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $timer_text
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    CodeComponent define_durs
      Code Type = Auto->JS
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      Begin Routine:
        if t_count>0:
            t1=1.5
            t2=0.375
            t3=1.5
            t4=0.375
            t5=1
            t6=0.25
            faster=' '
        elif t_count==0:
            t1=120
            t2=0.375
            t3=120
            t4=0.375
            t5=2
            t6=0.25
            faster=' '
    KeyboardComponent key
      allowedKeys = 'h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Welcome to the treasure hunting game!

        Please follow the instructions carefully to know how the game works in practice.

        Before completing the actual game, you will do a couple of practice rounds.

        Do not press 'esc', as this will close the game, unless you wish to.

        Let’s begin! Press 'c' to continue.
    KeyboardComponent welcome_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent RNG
      Code Type = JS
      Begin JS Experiment:
        /**
         * Seedable random number generator functions.
         * @version 1.0.0
         * @license Public Domain
         *
         * @example
         * var rng = new RNG('Example');
         * rng.random(40, 50);  // =>  42
         * rng.uniform();       // =>  0.7972798995050903
         * rng.normal();        // => -0.6698504543216376
         * rng.exponential();   // =>  1.0547367609131555
         * rng.poisson(4);      // =>  2
         * rng.gamma(4);        // =>  2.781724687386858
         */

        /**
         * @param {String} seed A string to seed the generator.
         * @constructor
         */
        function RC4(seed) {
            this.s = new Array(256);
            this.i = 0;
            this.j = 0;
            for (var i = 0; i < 256; i++) {
                this.s[i] = i;
            }
            if (seed) {
                this.mix(seed);
            }
        }

        /**
         * Get the underlying bytes of a string.
         * @param {string} string
         * @returns {Array} An array of bytes
         */
        RC4.getStringBytes = function(string) {
            var output = [];
            for (var i = 0; i < string.length; i++) {
                var c = string.charCodeAt(i);
                var bytes = [];
                do {
                    bytes.push(c & 0xFF);
                    c = c >> 8;
                } while (c > 0);
                output = output.concat(bytes.reverse());
            }
            return output;
        };

        RC4.prototype._swap = function(i, j) {
            var tmp = this.s[i];
            this.s[i] = this.s[j];
            this.s[j] = tmp;
        };

        /**
         * Mix additional entropy into this generator.
         * @param {String} seed
         */
        RC4.prototype.mix = function(seed) {
            var input = RC4.getStringBytes(seed);
            var j = 0;
            for (var i = 0; i < this.s.length; i++) {
                j += this.s[i] + input[i % input.length];
                j %= 256;
                this._swap(i, j);
            }
        };

        /**
         * @returns {number} The next byte of output from the generator.
         */
        RC4.prototype.next = function() {
            this.i = (this.i + 1) % 256;
            this.j = (this.j + this.s[this.i]) % 256;
            this._swap(this.i, this.j);
            return this.s[(this.s[this.i] + this.s[this.j]) % 256];
        };

        /**
         * Create a new random number generator with optional seed. If the
         * provided seed is a function (i.e. Math.random) it will be used as
         * the uniform number generator.
         * @param seed An arbitrary object used to seed the generator.
         * @constructor
         */
        RNG = function(seed) {
            if (seed == null) {
                seed = '' + Math.random() + Date.now();
            } else if (typeof seed === "function") {
                // Use it as a uniform number generator
                this.uniform = seed;
                this.nextByte = function() {
                    return ~~(this.uniform() * 256);
                };
                seed = null;
            } else if (Object.prototype.toString.call(seed) !== "[object String]") {
                seed = JSON.stringify(seed);
            }
            this._normal = null;
            if (seed) {
                this._state = new RC4(seed);
            } else {
                this._state = null;
            }
        }

        /**
         * @returns {number} Uniform random number between 0 and 255.
         */
        RNG.prototype.nextByte = function() {
            return this._state.next();
        };

        /**
         * @returns {number} Uniform random number between 0 and 1.
         */
        RNG.prototype.uniform = function() {
            var BYTES = 7; // 56 bits to make a 53-bit double
            var output = 0;
            for (var i = 0; i < BYTES; i++) {
                output *= 256;
                output += this.nextByte();
            }
            return output / (Math.pow(2, BYTES * 8) - 1);
        };

        /**
         * Produce a random integer within [n, m).
         * @param {number} [n=0]
         * @param {number} m
         *
         */
        RNG.prototype.random = function(n, m) {
            if (n == null) {
                return this.uniform();
            } else if (m == null) {
                m = n;
                n = 0;
            }
            return n + Math.floor(this.uniform() * (m - n));
        };

        /**
         * Generates numbers using this.uniform() with the Box-Muller transform.
         * @returns {number} Normally-distributed random number of mean 0, variance 1.
         */
        RNG.prototype.normal = function() {
            if (this._normal !== null) {
                var n = this._normal;
                this._normal = null;
                return n;
            } else {
                var x = this.uniform() || Math.pow(2, -53); // can't be exactly 0
                var y = this.uniform();
                this._normal = Math.sqrt(-2 * Math.log(x)) * Math.sin(2 * Math.PI * y);
                return Math.sqrt(-2 * Math.log(x)) * Math.cos(2 * Math.PI * y);
            }
        };

        /**
         * Generates numbers using this.uniform().
         * @returns {number} Number from the exponential distribution, lambda = 1.
         */
        RNG.prototype.exponential = function() {
            return -Math.log(this.uniform() || Math.pow(2, -53));
        };

        /**
         * Generates numbers using this.uniform() and Knuths method.
         * @param {number} [mean=1]
         * @returns {number} Number from the Poisson distribution.
         */
        RNG.prototype.poisson = function(mean) {
            var L = Math.exp(-(mean || 1));
            var k = 0, p = 1;
            do {
                k++;
                p *= this.uniform();
            } while (p > L);
            return k - 1;
        };

        /**
         * Generates numbers using this.uniform(), this.normal(),
         * this.exponential(), and the Marsaglia-Tsang method.
         * @param {number} a
         * @returns {number} Number from the gamma distribution.
         */
        RNG.prototype.gamma = function(a) {
            var d = (a < 1 ? 1 + a : a) - 1 / 3;
            var c = 1 / Math.sqrt(9 * d);
            do {
                do {
                    var x = this.normal();
                    var v = Math.pow(c * x + 1, 3);
                } while (v <= 0);
                var u = this.uniform();
                var x2 = Math.pow(x, 2);
            } while (u >= 1 - 0.0331 * x2 * x2 &&
                     Math.log(u) >= 0.5 * x2 + d * (1 - v + Math.log(v)));
            if (a < 1) {
                return d * v * Math.exp(this.exponential() / -a);
            } else {
                return d * v;
            }
        };

        /**
         * Accepts a dice rolling notation string and returns a generator
         * function for that distribution. The parser is quite flexible.
         * @param {string} expr A dice-rolling, expression i.e. '2d6+10'.
         * @param {RNG} rng An optional RNG object.
         * @returns {Function}
         */
        RNG.roller = function(expr, rng) {
            var parts = expr.split(/(\d+)?d(\d+)([+-]\d+)?/).slice(1);
            var dice = parseFloat(parts[0]) || 1;
            var sides = parseFloat(parts[1]);
            var mod = parseFloat(parts[2]) || 0;
            rng = rng || new RNG();
            return function() {
                var total = dice + mod;
                for (var i = 0; i < dice; i++) {
                    total += rng.random(sides);
                }
                return total;
            };
        };

        /* Provide a pre-made generator instance. */
        RNG.$ = new RNG();

        seed=Math.random();
  Routine lesson_pr
    TextComponent ls_tx_pr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great! You have finished the practice task. You are ready to go.

        Remember, try to collect as much treasure as possible, by selecting a ship that has a favourable chest.

        To know which chest is most favourable, keep track of the amount of treasure in each chest over time.

        The task will take around 18 minutes.

        Do not press 'esc', as this will close the task, unless you wish to.

        To start the task press 'c'.
    KeyboardComponent ls_pr_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent counter
      Code Type = Auto->JS
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      Begin Routine:
        t_count=0 #trial counter
    CodeComponent group_def_2
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['group']=='1':
            reward_type=["practice","neutral","trigger"]
        elif expInfo['group']=='2':
            reward_type=["practice","trigger","neutral"]

        tr_rews = expInfo['order'].split('')
  Routine the_end
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        end_text_content = "This is the end of the task.\n\nYour total score is: " +str(running_reward)+".\n\nOn the next page you will see a thank-you message. Please click ‘OK’ to be taken back to Prolific. Otherwise, we will not be able to PAY you.\n\nPress ‘c’ to continue."
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text_content
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    KeyboardComponent end_txt_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_pr
    TextComponent ls_text_ship
      letterHeight = 0.0365
      startVal [time (s)] = 0.0
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      text:
        When the practice starts, you will first select a ship to board (press ‘left’ or ‘right’). Remember, sometimes the ship will take you to an island you didn’t want.

        Once you’ve reached the island, you will attempt to collect the treasure from one of the chests (press ‘left’ or ‘right’). Initially, try to explore each chest.

        Collect as many pirate coins as possible. Pay attention to which chest is more favourable.

        Here, there is no time-limit and the practice does not count, but in the experiment, you have 1.5 seconds for each choice. This will be enough once you have practiced.

        Think carefully about your strategy but also follow your gut. You will gain more coins when you concentrate.

        Press 'c' to continue.
    KeyboardComponent ls_ship_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent counter_2
      Code Type = Auto->JS
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      Begin Routine:
        t_count=0 #trial counter
        running_reward=0
    CodeComponent group_def
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['group']=='1':
            reward_type=["practice","neutral","neutral","trigger","trigger"]
        elif expInfo['group']=='2':
            reward_type=["practice","trigger","trigger","neutral","neutral"]

        #tr_rews = expInfo['order'].split('')
        tr_rews = expInfo['order']
        rew_check = [38, 75, 113]
        #rew_check = [2, 3, 4]
        #rew_check = [4, 7, 11]
  Routine rest
    KeyboardComponent key_break
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if t_count==0:
            text_break.height=0.04
            break_txt="Great! You have finished the practice task. You are ready to go.\n\nRemember, try to collect as much treasure as possible, by opening the most favourable chest. Keep track which one is the best.\n\nThe game will take around 20 minutes.\n\nDo not press ‘esc’, as this will close the task, unless you wish to.\n\nTo start the task press ‘c’."
        if t_count==1 or t_count==3:
            text_break.height=0.045
            progress = t_count*25
            if running_reward<rew_check[t_count-1]:
                break_txt="Good job, but try a bit harder!\n\nYour score so far is: "+str(running_reward)+"\n\nTake a break.\n\nRecommended break length is 1 minute.\n\nYou completed "+str(progress)+"% of the task.\n\nWhen you are ready, press ‘c’ to continue."
            if running_reward>=rew_check[t_count-1]:
                break_txt="You are doing amzing!\n\nYour score so far is: "+str(running_reward)+"\n\nTake a break.\n\nRecommended break length is 1 minute.\n\nYou completed "+str(progress)+"% of the task.\n\nWhen you are ready, press ‘c’ to continue."
        if t_count==2:
            text_break.height=0.045
            progress = t_count*25
            if running_reward<rew_check[t_count-1]:
                break_txt="Good job, but try a bit harder!\n\nYour score so far is: "+str(running_reward)+"\n\nTake a break before the second condition starts.\n\nRecommended break length is 2 minutes.\n\nYou completed "+str(progress)+"% of the task.\n\nWhen you are ready, press ‘c’ to continue."
            if running_reward>=rew_check[t_count-1]:
                break_txt="You are doing amazing!\n\nYour score so far is: "+str(running_reward)+"\n\nTake a break before the second condition starts.\n\nRecommended break length is 2 minutes.\n\nYou completed "+str(progress)+"% of the task.\n\nWhen you are ready, press ‘c’ to continue."
      Each Frame:
        if t_count==4:
            continueRoutine=false
      End Routine:
        t_count=t_count+1
    TextComponent text_break
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $break_txt
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  Routine init_pr
    CodeComponent timer_2
      Code Type = Auto->JS
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      Each Frame:
        countdown=round(3-t)
        if countdown==0:
            timer_text="Go!"
        else:
             timer_text="Get ready! The task begins in: "+str(countdown)
    CodeComponent define_GRW_2
      Code Type = Auto->JS
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      Begin Routine:
        sigma = 0.025*1.5 #sigma for GRW
        if t_count==0:
            prob_rew = {'11':(0.45-0.25)*Math.random()+ 0.25, '12':(0.75-0.55)*Math.random() + 0.55, '21':(0.75-0.55)*Math.random() + 0.55, '22':(0.45-0.25)*Math.random()+ 0.25}
        if t_count==1:
            prob_rew = {'11':(0.75-0.55)*Math.random() + 0.55, '12':(0.45-0.25)*Math.random()+ 0.25, '21':(0.45-0.25)*Math.random()+ 0.25, '22':(0.75-0.55)*Math.random() + 0.55}
    TextComponent task_warn_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $timer_text
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    CodeComponent define_durs_2
      Code Type = Auto->JS
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      Begin Routine:
        t1=1.5
        t2=0.25
        t3=1.5
        t4=0.25
        t5=1
        faster=' '
    KeyboardComponent key_2
      allowedKeys = 'h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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  Routine wait_pr
    ImageComponent wait_bg_2
      image = jpg/empty.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = norm
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    TextComponent faster_txt_2
      color [set every repeat] = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $faster
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    CodeComponent faster_code_2
      Code Type = Auto->JS
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      End Routine:
        faster=' '
  Routine stage1_pr
    ImageComponent s1_right_2
      image = jpg/s1/fractal_stage1_s1_2.jpg
      pos = (0.35,-0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
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    ImageComponent s1_left_2
      image = jpg/s1/fractal_stage1_s1_1.jpg
      pos = (-0.35, -0.075)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
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    ImageComponent bg_s1_2
      image = None
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
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    KeyboardComponent stage
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1
      store = first key
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    CodeComponent save_stage1_c_2
      Code Type = Auto->JS
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      End Routine:
        #if no response, set times to 0
        if not stage_1.keys:
            t2=0
            t3=0
            t4=0
            t5=0
            faster='Try faster!'
            continueRoutine=false

        #stage 1 choice
        stage1_choice=0
        if stage_1.keys=="left":
            stage1_choice=1
        if stage_1.keys=="right":
            stage1_choice=2

        psychoJS.experiment.addData('stage1_choice',stage1_choice)
Flow
  Routine welcome
  Routine instr_pr
  LoopInitiator conditions loopType="TrialHandler"
    conditionsFile = html/resources/n_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('n_trials', 25)]),
      OrderedDict([('n_trials', 75)]),
      OrderedDict([('n_trials', 75)]),
      OrderedDict([('n_trials', 75)]),
      OrderedDict([('n_trials', 75)])]
    Routine initialise
    LoopInitiator nt loopType="TrialHandler"
      loopType = sequential
      nReps = n_trials
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      Routine wait
      Routine stage1
      Routine post_stage1
      Routine stage2
      Routine post_stage2
      Routine reward
    LoopTerminator nt
    Routine rest
  LoopTerminator conditions
  Routine the_end
